<?xml version="1.0" encoding="UTF-8"?>
<gadgetronStreamConfiguration xmlns="http://gadgetron.sf.net/gadgetron" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd">
	<gadget>
		<name>LoadIsmrmrdDatasetImages</name>
		<dll>cfmm_gadgets</dll>
		<classname>LoadIsmrmrdDatasetImages</classname>
		<property>
			<name>filename</name>
		</property>
		<property>
			<name>groupname</name>
			<value>images</value>
		</property>
		<property>
			<name>varname</name>
			<value>complex</value>
		</property>
	</gadget>
	<gadget>
		<name>DecrementIndex</name>
		<dll>gadgetron_PUROR</dll>
		<classname>DecImageIndex</classname>
	</gadget>
	<gadget>
		<name>GetMasks</name>
		<dll>gadgetron_PUROR</dll>
		<classname>GetMaskGadget</classname>
	</gadget>
	<gadget>
		<name>Unwrap</name>
		<dll>gadgetron_PUROR</dll>
		<classname>UnwrapGadget</classname>
		<property>
			<name>threads</name>
			<value>6</value>
		</property>
	</gadget>
	<!--<gadget>
		<name>Reorder</name>
		<dll>gadgetron_PUROR</dll>
		<classname>ReorderGadget</classname>
	</gadget>-->
	<gadget>
		<name>HighPassFilter</name>
		<dll>gadgetron_PUROR</dll>
		<classname>HPFGadget</classname>
		<property>
			<name>sigma</name>
			<value>.007</value>
		</property>
	</gadget>
	<gadget>
		<name>Accumulator</name>
		<dll>gadgetron_PUROR</dll>
		<classname>IEVChannelSumGadget</classname>
	</gadget>
	<gadget><!--The MRT study scans need to be flipped -->
		<name>Flip</name>
		<dll>gadgetron_PUROR</dll>
		<classname>FlipGadget</classname>
	</gadget>
	<gadget>
		<name>AutoScaleEntireImage</name>
		<dll>cfmm_gadgets</dll>
		<classname>AutoScaleEntireImage</classname>
		<property>
			<name>numEchos</name>
		</property>
		<property>
			<name>is_signed</name>
			<value>true</value>
		</property>
	</gadget>
	<gadget>
		<name>DICOMStream</name>
		<dll>cfmm_gadgets</dll>
		<classname>DicomStream</classname>
	</gadget>
	<gadget>
		<name>AddMetaData</name>
		<dll>gadgetron_PUROR</dll>
		<classname>AddMetaData</classname>
	</gadget>
	<gadget>
		<name>DICOMSave</name>
		<dll>cfmm_gadgets</dll>
		<classname>DicomSave</classname>
		<property>
			<name>dicom_dir</name>
			<value>DicomResults</value>
		</property>
	</gadget>
	<!--<gadget>
		<name>DICOMSend</name>
		<dll>cfmm_gadgets</dll>
		<classname>DicomSend</classname>
		<property>
			<name>peerHostName</name>
			<value>dicom-public.imaging.robarts.ca</value>
		</property>
		<property>
			<name>peerPort</name>
			<value>11115</value>
		</property>
		<property>
			<name>peerAETitle</name>
			<value>CFMM-Public</value>
		</property>
		<property>
			<name>callingAETitle</name>
			<value>GADGETRON</value>
		</property>
		<property>
			<name>dcmPrivateKey</name>
			<value>/work/twhelan5/PUROR_IEV/key.pem</value>
		</property>
		<property>
			<name>dcmCertFile</name>
			<value>/work/twhelan5/PUROR_IEV/cert.pem</value>
		</property>
		<property>
			<name>dcmPassphrase</name>
			<value>gadgetron_sharcnet_client</value>
		</property>
		<property>
			<name>username</name>
			<value>twhelan5</value>
		</property>
		<property>
			<name>privateKey</name>
			<value>/home/twhelan5/.ssh/intercluster</value>
		</property>
		<property>
			<name>localHost</name>
			<value>127.0.0.1</value>
		</property>
		<property>
			<name>localPort</name>
			<value>11112</value>
		</property>
		<property>
		<name>forwardHost</name>
			<value>10.16.1.38</value>
		</property>
		<property>
			<name>forwardPort</name>
			<value>22</value>
		</property>
	</gadget>-->
</gadgetronStreamConfiguration>
